PsychoPy2experiment version="2024.2.1a1"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Data filename = u'data/%s/%s_%s_%s' % (expInfo['participant'], expInfo['participant'], expName, expInfo['session'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_OFF
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_DIAMETER
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = LEFT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = auditory_oddball
  eyetracker = SR Research Ltd
  keyboardBackend = ioHub
  logging level = warning
  measureFrameRate = False
  runMode = 1
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Routines
  Routine _welcome
    RoutineSettingsComponent _welcome
      saveStartStop = False
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    TextComponent text_welcome
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Welcome! This task will take approximately 7 minutes.

        Before we explain the task, we need to first calibrate the eyetracking camera. Please sit in a comfortable position with your head on the chin rest. Once we begin, it is important that you stay in the same position throughout this task.

        Please take a moment to adjust the chair height, chin rest, and sitting posture. Make sure that you feel comfortable and can stay still for a while.


        When you are ready, press the spacebar
    KeyboardComponent key_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_welcome
      saveStartStop = False
      sound [set every repeat] = resource/welcome.wav
      startVal [time (s)] = 0.8
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  Routine __start__
    RoutineSettingsComponent __start__
      saveStartStop = False
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    TextComponent text_start
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = We are now ready to begin...
      units = norm
      wrapWidth = 1.8
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    SoundComponent read_start
      saveStartStop = False
      sound [set every repeat] = resource/ready_to_begin.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.6
      syncScreenRefresh = False
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    CodeComponent trigger_table
      Code Type = Py
      Begin Experiment:
        ##TASK ID TRIGGER VALUES##
        # special code 100 (task start, task ID should follow immediately)
        task_start_code = 100
        # special code 104 (task ID for auditory oddball P300 task)
        task_ID_code = 104

        ##GENERAL TRIGGER VALUES##
        # special code 122 (block start)
        block_start_code = 122
        # special code 123 (block end)
        block_end_code = 123

        ##TASK SPECIFIC TRIGGER VALUES##
        # N.B.: only use values 1-99 and provide clear comments on used values
        regular_p300_code = 41
        oddball_p300_code = 42
    CodeComponent task_id
      Code Type = Py
      Begin Experiment:
        dev.activate_line(bitmask=task_start_code)  # special code for task start
        core.wait(0.5)  # wait 500ms between two consecutive triggers
        dev.activate_line(bitmask=task_ID_code)  # special code for task ID
    CodeComponent eeg
      Code Type = Py
      Before Experiment:
        import pyxid2
        print("Getting a list of all attached XID devices...")
        devices = pyxid2.get_xid_devices()

        if devices:
            dev = devices[0]
            print("Found device:", dev)
            assert dev.device_name == 'Cedrus C-POD', "Incorrect C-POD detected."
            dev.set_pulse_duration(50)  # set pulse duration to 50ms

            # Start EEG recording
            print("Sending trigger code 126 to start EEG recording...")
            dev.activate_line(bitmask=126)  # trigger 126 will start EEG
            print("Waiting 10 seconds for the EEG recording to start...")
            print("")
            core.wait(10)  # wait 10s for the EEG system to start recording

            # Marching lights test
            print("C-POD<->eego 7-bit trigger lines test...")
            for line in range(1, 8):  # raise lines 1-7 one at a time
                print("  raising line {} (bitmask {})".format(line, 2 ** (line-1)))
                dev.activate_line(lines=line)
                core.wait(0.5)  # wait 500ms between two consecutive triggers
            dev.con.set_digio_lines_to_mask(0)  # XidDevice.clear_all_lines()
            print("EEG system is now ready for the experiment to start.")
            print("")

        else:
            # Dummy XidDevice for code components to run without C-POD connected
            class dummyXidDevice(object):
                def __init__(self):
                    pass
                def activate_line(self, lines=None, bitmask=None):
                    pass


            print("WARNING: No C-POD connected for this session! "
                  "You must start/stop EEG recording manually!")
            dev = dummyXidDevice()
      End Experiment:
        # Stop EEG recording
        dev.activate_line(bitmask=127)  # trigger 127 will stop EEG
    EyetrackerRecordComponent etRecord
      actionType = Start Only
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent condition_setup
      Code Type = Py
      Begin Experiment:
        # Set up condition arrays for the experiment
        regular_frequency = 440
        oddball_frequency = 880

        # Generate a tone frequency list with 20% oddball trials
        tone_frequency_list = []
        n_trials = 100
        for _ in range(20):  # 20 * 5 = 100 trials in total
            chunk_list = [regular_frequency]  # one chunk has 5 tones, the 1st is always regular
            temp = [regular_frequency] * 3 + [oddball_frequency]  # one oddball in the rest 4 tones
            np.random.shuffle(temp)  # shuffle
            chunk_list += temp  # append remaining 4 to the chunk_list
            tone_frequency_list += chunk_list  # append the chunk to the full list

        # Inter-trial interval (ITI) ranges from 1500ms to 2500ms
        iti_list = list(1.5 + random(n_trials) + 0.2)  # beginning 200ms is the tone duration
  Routine trial
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    CodeComponent set_tone_frequency
      Code Type = Py
      Begin Routine:
        # Get the last element in the array that gets consumed during trial loop
        iti = iti_list.pop(0)
        tone_frequency = tone_frequency_list.pop(0)

        # check if the cucrent sound is an oddball
        tone_is_oddball = tone_frequency == oddball_frequency
        thisExp.addData('tone_is_oddball', tone_is_oddball)  # add to data table
        thisExp.addData('iti', iti - 0.2)  # add to data table
    SoundComponent sound_tone
      sound [set every repeat] = $tone_frequency
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent trigger_tone
      Code Type = Py
      Begin Routine:
        pulse_started = False
      Each Frame:
        if sound_tone.status == STARTED and not pulse_started:
            if tone_is_oddball:
                dev.activate_line(bitmask=oddball_p300_code)
                eyetracker.sendMessage(oddball_p300_code)
            else:
                dev.activate_line(bitmask=regular_p300_code)
                eyetracker.sendMessage(regular_p300_code)

            pulse_started = True
    KeyboardComponent key_tone_resp
      allowedKeys = 'space'
      durationEstim = 2.2
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $iti
      store = all keys
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  Routine instruct_regular
    RoutineSettingsComponent instruct_regular
      saveStartStop = False
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    TextComponent text_instruct_regular
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        INSTRUCTIONS:

        Every time you hear the following tone, don't press the spacebar.

        You do not need to make any response.


        Press the spacebar to hear the tone
    KeyboardComponent key_instruct_regular
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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  Routine tone_oddball
    RoutineSettingsComponent tone_oddball
      saveStartStop = False
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    TextComponent text_fixation_oddball
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
      wrapWidth = 1.8
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    SoundComponent sound_oddball
      saveStartStop = False
      sound [set every repeat] = $oddball_frequency
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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  Routine tone_regular
    RoutineSettingsComponent tone_regular
      saveStartStop = False
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    TextComponent text_fixation_regular
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
      wrapWidth = 1.8
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    SoundComponent sound_regular
      saveStartStop = False
      sound [set every repeat] = $regular_frequency
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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  Routine instruct_combined
    RoutineSettingsComponent instruct_combined
      saveStartStop = False
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    TextComponent text_instruct_combined
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        INSTRUCTIONS:

        Now we will hear both tones again.
        Pay attention and decide which tone you need to respond to:

        is it the first tone or the second tone?


        Press the spacebar to hear the two tones
    KeyboardComponent key_instruct_combined
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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  Routine instruct_oddball
    RoutineSettingsComponent instruct_oddball
      saveStartStop = False
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    TextComponent text_instruct_oddball
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        INSTRUCTIONS:

        In this task you will hear a series of tones.

        There are two different tones. Every time you hear the following tone, respond by pressing the spacebar.


        Press the spacebar to hear the tone
    KeyboardComponent key_instruct_oddball
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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  Routine instruct_verify
    RoutineSettingsComponent instruct_verify
      saveStartStop = False
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    TextComponent text_instruct_verify
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        INSTRUCTIONS:

        Would you respond to the first tone or the second tone?

        Please tell the examiner verbally.


        Press the spacebar to continue
    KeyboardComponent key_instruct_verify
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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  Routine tone_combined
    RoutineSettingsComponent tone_combined
      saveStartStop = False
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    TextComponent text_fixation_combined
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = +
      wrapWidth = 1.8
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    SoundComponent sound_oddball_combined
      saveStartStop = False
      sound [set every repeat] = $oddball_frequency
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    SoundComponent sound_regular_combined
      saveStartStop = False
      sound [set every repeat] = $regular_frequency
      startVal [time (s)] = 1.7
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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  Routine close_eyes
    RoutineSettingsComponent close_eyes
      saveStartStop = False
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    TextComponent text_close_eyes
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Please close your eyes
      units = norm
      wrapWidth = 1.8
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    CodeComponent trigger_trial_block
      Code Type = Py
      Begin Routine:
        # Beginning of main experiment trial block
        dev.activate_line(bitmask=block_start_code)
        eyetracker.sendMessage(block_start_code)
        # no need to wait 500ms because this routine lasts 2.0s before trial triggers
  Routine instruct_begin
    RoutineSettingsComponent instruct_begin
      saveStartStop = False
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    TextComponent text_instruct_begin
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        INSTRUCTIONS:

        Please perform this task with your eyes closed and try to respond as quickly and accurately as possible.


        Press the spacebar to begin the task
    KeyboardComponent key_instruct_begin
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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  Routine _et_instruct
    RoutineSettingsComponent _et_instruct
      saveStartStop = False
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    TextComponent text_et
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        During the calibration, you will see a target circle moving around the screen. Please try to track it with your eyes.

        Make sure to keep looking at the circle when it stops, and follow it when it moves. It is important that you keep your head on the chin rest once this part begins.


        Press the spacebar when you are ready, and our team will start the calibration for you
    KeyboardComponent key_et
      allowedKeys = 'space'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_et
      saveStartStop = False
      sound [set every repeat] = resource/eyetrack_calibrate_instruct.wav
      startVal [time (s)] = 0.8
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  Routine _et_mask
    RoutineSettingsComponent _et_mask
      saveStartStop = False
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    TextComponent text_mask
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
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  EyetrackerCalibrationRoutine _et_cal
    borderColor = green
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    fillColor = white
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = black
    innerRadius = 0.005
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.015
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  Routine __end__
    RoutineSettingsComponent __end__
      saveStartStop = False
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    TextComponent text_thank_you
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thank you. You have completed this task!
      units = norm
      wrapWidth = 1.8
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    SoundComponent read_thank_you
      saveStartStop = False
      sound [set every repeat] = resource/thank_you.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 2.7
      syncScreenRefresh = False
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    CodeComponent trigger_trial_block_end
      Code Type = Py
      Begin Routine:
        # End of main experiment trial block
        dev.activate_line(bitmask=block_end_code)
        eyetracker.sendMessage(block_end_code)
        # no need to wait 500ms as this routine lasts 3.0s before experiment ends
Flow
  Routine _welcome
  Routine _et_instruct
  Routine _et_mask
  EyetrackerCalibrationRoutine _et_cal
  Routine __start__
  Routine instruct_oddball
  Routine tone_oddball
  Routine instruct_regular
  Routine tone_regular
  Routine instruct_combined
  Routine tone_combined
  Routine instruct_verify
  Routine instruct_begin
  Routine close_eyes
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = n_trials
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    conditions:
      [OrderedDict([('target', 'go'), ('target_image', 'resources/go.png'), ('intertrial', 1.4)]),
      OrderedDict([('target', 'nogo'), ('target_image', 'resources/nogo.png'), ('intertrial', 1.9)]),
      OrderedDict([('target', 'go'), ('target_image', 'resources/go.png'), ('intertrial', 1.9)]),
      OrderedDict([('target', 'go'), ('target_image', 'resources/go.png'), ('intertrial', 1.3)]),
      OrderedDict([('target', 'go'), ('target_image', 'resources/go.png'), ('intertrial', 1.6)]),
      OrderedDict([('target', 'go'), ('target_image', 'resources/go.png'), ('intertrial', 1.8)]),
      OrderedDict([('target', 'go'), ('target_image', 'resources/go.png'), ('intertrial', 1.5)]),
      OrderedDict([('target', 'go'), ('target_image', 'resources/go.png'), ('intertrial', 1.0)]),
      OrderedDict([('target', 'go'), ('target_image', 'resources/go.png'), ('intertrial', 1.4)]),
      OrderedDict([('target', 'go'), ('target_image', 'resources/go.png'), ('intertrial', 1.0)]),
      OrderedDict([('target', 'go'), ('target_image', 'resources/go.png'), ('intertrial', 1.9)]),
      OrderedDict([('target', 'go'), ('target_image', 'resources/go.png'), ('intertrial', 1.4)]),
      OrderedDict([('target', 'go'), ('target_image', 'resources/go.png'), ('intertrial', 1.0)]),
      OrderedDict([('target', 'go'), ('target_image', 'resources/go.png'), ('intertrial', 1.0)]),
      OrderedDict([('target', 'nogo'), ('target_image', 'resources/nogo.png'), ('intertrial', 1.1)]),
      OrderedDict([('target', 'go'), ('target_image', 'resources/go.png'), ('intertrial', 1.0)])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
    Routine trial
  LoopTerminator trials
  Routine __end__
