PsychoPy2experiment version="2024.2.2a1"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Data filename = u'data/%s/%s_%s_%s' % (expInfo['participant'], expInfo['participant'], expName, expInfo['session'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = auditory_oddball_nopupil
  keyboardBackend = ioHub
  logging level = debug
  measureFrameRate = False
  runMode = 1
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Routines
  Routine __start__
    RoutineSettingsComponent __start__
      saveStartStop = False
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    CodeComponent trigger_table
      Code Type = Py
      Begin Experiment:
        ##TASK ID TRIGGER VALUES##
        # special code 100 (task start, task ID should follow immediately)
        task_start_code = 100
        # special code 104 (task ID for auditory oddball P300 task)
        task_ID_code = 104
        print("Starting experiment: < Auditory Oddball Task >. Task ID:", task_ID_code)

        ##GENERAL TRIGGER VALUES##
        # special code 122 (block start)
        block_start_code = 122
        # special code 123 (block end)
        block_end_code = 123

        ##TASK SPECIFIC TRIGGER VALUES##
        # N.B.: only use values 1-99 and provide clear comments on used values
        regular_p300_code = 41
        oddball_p300_code = 42
    CodeComponent task_id
      Code Type = Py
      Begin Experiment:
        dev.activate_line(bitmask=task_start_code)  # special code for task start
        core.wait(0.5)  # wait 500ms between two consecutive triggers
        dev.activate_line(bitmask=task_ID_code)  # special code for task ID
    CodeComponent eeg
      Code Type = Py
      Before Experiment:
        import pyxid2
        import threading
        import signal


        def exit_after(s):
            '''
            function decorator to raise KeyboardInterrupt exception
            if function takes longer than s seconds
            '''
            def outer(fn):
                def inner(*args, **kwargs):
                    timer = threading.Timer(s, signal.raise_signal, args=[signal.SIGINT])
                    timer.start()
                    try:
                        result = fn(*args, **kwargs)
                    finally:
                        timer.cancel()
                    return result
                return inner
            return outer


        @exit_after(1)  # exit if function takes longer than 1 seconds
        def _get_xid_devices():
            return pyxid2.get_xid_devices()


        def get_xid_devices():
            print("Getting a list of all attached XID devices...")
            attempt_count = 0
            while attempt_count >= 0:
                attempt_count += 1
                print('     Attempt:', attempt_count)
                attempt_count *= -1  # try to exit the while loop
                try:
                    devices = _get_xid_devices()
                except KeyboardInterrupt:
                    attempt_count *= -1  # get back in the while loop
            return devices


        devices = get_xid_devices()

        if devices:
            dev = devices[0]
            print("Found device:", dev)
            assert dev.device_name in ['Cedrus C-POD', 'Cedrus StimTracker Quad'], "Incorrect XID device detected."
            if dev.device_name == 'Cedrus C-POD':
                pod_name = 'C-POD'
            else:
                pod_name = 'M-POD'
            dev.set_pulse_duration(50)  # set pulse duration to 50ms

            # Start EEG recording
            print("Sending trigger code 126 to start EEG recording...")
            dev.activate_line(bitmask=126)  # trigger 126 will start EEG
            print("Waiting 10 seconds for the EEG recording to start...\n")
            core.wait(10)  # wait 10s for the EEG system to start recording

            # Marching lights test
            print(f"{pod_name}<->eego 7-bit trigger lines test...")
            for line in range(1, 8):  # raise lines 1-7 one at a time
                print("  raising line {} (bitmask {})".format(line, 2 ** (line-1)))
                dev.activate_line(lines=line)
                core.wait(0.5)  # wait 500ms between two consecutive triggers
            dev.con.set_digio_lines_to_mask(0)  # XidDevice.clear_all_lines()
            print("EEG system is now ready for the experiment to start.\n")

        else:
            # Dummy XidDevice for code components to run without C-POD connected
            class dummyXidDevice(object):
                def __init__(self):
                    pass
                def activate_line(self, lines=None, bitmask=None):
                    pass


            print("WARNING: No C/M-POD connected for this session! "
                  "You must start/stop EEG recording manually!\n")
            dev = dummyXidDevice()
      End Experiment:
        # Stop EEG recording
        dev.activate_line(bitmask=127)  # trigger 127 will stop EEG
    CodeComponent condition_setup
      Code Type = Py
      Begin Experiment:
        # Set up condition arrays for the experiment
        regular_frequency = 440
        oddball_frequency = 880

        # Generate a tone frequency list with 20% oddball trials
        tone_frequency_list = []
        n_trials = 100
        for _ in range(20):  # 20 * 5 = 100 trials in total
            chunk_list = [regular_frequency]  # one chunk has 5 tones, the 1st is always regular
            temp = [regular_frequency] * 3 + [oddball_frequency]  # one oddball in the rest 4 tones
            np.random.shuffle(temp)  # shuffle
            chunk_list += temp  # append remaining 4 to the chunk_list
            tone_frequency_list += chunk_list  # append the chunk to the full list

        # Inter-trial interval (ITI) ranges from 1500ms to 2500ms
        iti_list = list(1.5 + random(n_trials) + 0.2)  # beginning 200ms is the tone duration
  Routine trial
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    CodeComponent set_tone_frequency
      Code Type = Py
      Begin Routine:
        # Get the last element in the array that gets consumed during trial loop
        iti = iti_list.pop(0)
        tone_frequency = tone_frequency_list.pop(0)

        # check if the cucrent sound is an oddball
        tone_is_oddball = tone_frequency == oddball_frequency
        thisExp.addData('tone_is_oddball', tone_is_oddball)  # add to data table
        thisExp.addData('iti', iti - 0.2)  # add to data table
    SoundComponent sound_tone
      sound [set every repeat] = $tone_frequency
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent trigger_tone
      Code Type = Py
      Begin Routine:
        pulse_started = False
      Each Frame:
        if sound_tone.status == STARTED and not pulse_started:
            if tone_is_oddball:
                dev.activate_line(bitmask=oddball_p300_code)
            else:
                dev.activate_line(bitmask=regular_p300_code)

            pulse_started = True
    KeyboardComponent key_tone_resp
      allowedKeys = '1'
      durationEstim = 2.2
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = $iti
      store = all keys
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  Routine instruct_regular
    RoutineSettingsComponent instruct_regular
      saveStartStop = False
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    TextComponent text_instruct_regular
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        INSTRUCTIONS:

        Every time you hear the following tone, don't press any key.

        You do not need to make any response.


        Now press any of the white keys to hear the tone
    KeyboardComponent key_instruct_regular
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_regular
      saveStartStop = False
      sound [set every repeat] = resource/instruct_regular.wav
      startVal [time (s)] = 0.8
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  Routine tone_oddball
    RoutineSettingsComponent tone_oddball
      saveStartStop = False
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    TextComponent text_fixation_oddball
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
      wrapWidth = 1.8
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    SoundComponent sound_oddball
      saveStartStop = False
      sound [set every repeat] = $oddball_frequency
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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  Routine tone_regular
    RoutineSettingsComponent tone_regular
      saveStartStop = False
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    TextComponent text_fixation_regular
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
      wrapWidth = 1.8
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    SoundComponent sound_regular
      saveStartStop = False
      sound [set every repeat] = $regular_frequency
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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  Routine instruct_combined
    RoutineSettingsComponent instruct_combined
      saveStartStop = False
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    TextComponent text_instruct_combined
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        INSTRUCTIONS:

        Now we will hear both tones again.
        Pay attention and decide which tone you need to respond to:

        is it the first tone or the second tone?


        Press any of the white keys to hear the two tones together
    KeyboardComponent key_instruct_combined
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_combined
      saveStartStop = False
      sound [set every repeat] = resource/instruct_combined.wav
      startVal [time (s)] = 0.8
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  Routine instruct_oddball
    RoutineSettingsComponent instruct_oddball
      saveStartStop = False
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    TextComponent text_instruct_oddball
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        INSTRUCTIONS:

        In this task you will hear a series of tones.

        There are two different tones. Every time you hear the following tone, respond by pressing the Green key.


        Now press any of the white keys to hear the tone
    KeyboardComponent key_instruct_oddball
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_oddball
      saveStartStop = False
      sound [set every repeat] = resource/instruct_oddball.wav
      startVal [time (s)] = 0.8
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  Routine instruct_verify
    RoutineSettingsComponent instruct_verify
      saveStartStop = False
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    TextComponent text_instruct_verify
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Would you respond to the first tone or the second tone?

        Please tell the examiner verbally. You can also ask to hear the two tones again if you are not sure.
    KeyboardComponent key_instruct_verify
      allowedKeys = 'r', 'o'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_verify
      saveStartStop = False
      sound [set every repeat] = resource/instruct_verify.wav
      startVal [time (s)] = 0.8
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    CodeComponent code_instruct_verify
      Code Type = Py
      End Routine:
        if key_instruct_verify.keys == 'o':  # proceed to main experiment
            practice_loop.finished = True
  Routine tone_combined
    RoutineSettingsComponent tone_combined
      saveStartStop = False
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    TextComponent text_fixation_combined
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = +
      wrapWidth = 1.8
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    SoundComponent sound_oddball_combined
      saveStartStop = False
      sound [set every repeat] = $oddball_frequency
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    SoundComponent sound_regular_combined
      saveStartStop = False
      sound [set every repeat] = $regular_frequency
      startVal [time (s)] = 1.7
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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  Routine close_eyes
    RoutineSettingsComponent close_eyes
      saveStartStop = False
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    TextComponent text_close_eyes
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Please close your eyes...
      units = norm
      wrapWidth = 1.8
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    SoundComponent read_close_eyes
      saveStartStop = False
      sound [set every repeat] = resource/close_eyes.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.6
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    CodeComponent trigger_trial_block
      Code Type = Py
      Begin Routine:
        # Beginning of main experiment trial block
        dev.activate_line(bitmask=block_start_code)
        # no need to wait 500ms because this routine lasts 2.0s before trial triggers
  Routine instruct_begin
    RoutineSettingsComponent instruct_begin
      saveStartStop = False
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    TextComponent text_instruct_begin
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        INSTRUCTIONS:

        Remember to press the Green key every time you hear the first tone, and otherwise do not respond. Please perform this task with your eyes closed and try to respond as quickly and accurately as possible.


        Press the green key to begin the task
    KeyboardComponent key_instruct_begin
      allowedKeys = '1'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_begin
      saveStartStop = False
      sound [set every repeat] = resource/instruct_begin.wav
      startVal [time (s)] = 0.8
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  Routine __end__
    RoutineSettingsComponent __end__
      saveStartStop = False
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    TextComponent text_thank_you
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thank you. You have completed this task!
      units = norm
      wrapWidth = 1.8
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    SoundComponent read_thank_you
      saveStartStop = False
      sound [set every repeat] = resource/thank_you.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 2.7
      syncScreenRefresh = False
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    CodeComponent trigger_trial_block_end
      Code Type = Py
      Begin Routine:
        # End of main experiment trial block
        dev.activate_line(bitmask=block_end_code)
        # no need to wait 500ms as this routine lasts 3.0s before experiment ends
Flow
  Routine __start__
  Routine instruct_oddball
  Routine tone_oddball
  Routine instruct_regular
  Routine tone_regular
  LoopInitiator practice_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 99
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    Routine instruct_combined
    Routine tone_combined
    Routine instruct_verify
  LoopTerminator practice_loop
  Routine instruct_begin
  Routine close_eyes
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = n_trials
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    Routine trial
  LoopTerminator trials
  Routine __end__
